opentrons/protocol-designer 3.0.7
schemaVersion: 3
protocolName: PLATE 1 - Greiner - GEN1 right - Refract
author: TAM
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL (slot 1): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  Opentrons 96 Tip Rack 300 µL (slot 4): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 4}
  Corning 96 Well Plate 360 µL Flat: {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 2}
  Greiner Bio-One 384 Well Plate 110 µL: {definitionId: custom_beta/greinerbioone_384_wellplate_110ul/1, slot: 3}
pipetteTiprackAssignments:
  p300_single: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - DMSO: {description: for test, serialize: true}
ingredLocations:
  Corning 96 Well Plate 360 µL Flat:
    DMSO {volume: 180}: A2-A7, A1-F1, B2-F2, B3-F3, B4-F4, B5-F5, B6-F6, B7-F7, A8-F8, A9-F9, A10-F10, A11-F11, A12-F12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 30
  path: single
  changeTip: always
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A1
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  aspirate_flowRate: 80
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 2
  dispense_labware: Greiner Bio-One 384 Well Plate 110 µL
  dispense_wells: B1
  dispense_mmFromBottom: 2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 30
  path: single
  changeTip: always
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: B1
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  aspirate_flowRate: 80
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 2
  dispense_labware: Greiner Bio-One 384 Well Plate 110 µL
  dispense_wells: C1
  dispense_mmFromBottom: 2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 30
  path: single
  changeTip: always
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: C1
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  aspirate_flowRate: 80
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 2
  dispense_labware: Greiner Bio-One 384 Well Plate 110 µL
  dispense_wells: D1
  dispense_mmFromBottom: 2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 30
  path: single
  changeTip: always
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: D1
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  aspirate_flowRate: 80
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 2
  dispense_labware: Greiner Bio-One 384 Well Plate 110 µL
  dispense_wells: E1
  dispense_mmFromBottom: 2
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- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 30
  path: single
  changeTip: always
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: F12
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  aspirate_flowRate: 80
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 2
  dispense_labware: Greiner Bio-One 384 Well Plate 110 µL
  dispense_wells: C6
  dispense_mmFromBottom: 2
labwareDefinitions:
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  custom_beta/greinerbioone_384_wellplate_110ul/1:
    brand: {brand: Greiner Bio-One, brandId: [781090]}
    metadata: {displayName: Greiner Bio-One 384 Well Plate 110 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 14.5}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: greinerbioone_384_wellplate_110ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 11.5, totalLiquidVolume: 110, shape: rectangular, xDimension: 3.7, yDimension: 3.7, x: 12.13, y: 76.49, z: 3}
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commands:
- pickUpTip: {pipette: p300_single, labware: Opentrons 96 Tip Rack 300 µL (slot 1), well: A1}
- aspirate: {pipette: p300_single, volume: 100, labware: Corning 96 Well Plate 360 µL Flat, well: A1, offsetFromBottomMm: 2, flowRate: 80}
- dispense: {pipette: p300_single, volume: 100, labware: Corning 96 Well Plate 360 µL Flat, well: A1, offsetFromBottomMm: 2, flowRate: 300}
- aspirate: {pipette: p300_single, volume: 100, labware: Corning 96 Well Plate 360 µL Flat, well: A1, offsetFromBottomMm: 2, flowRate: 80}
- dispense: {pipette: p300_single, volume: 100, labware: Corning 96 Well Plate 360 µL Flat, well: A1, offsetFromBottomMm: 2, flowRate: 300}
- aspirate: {pipette: p300_single, volume: 100, labware: Corning 96 Well Plate 360 µL Flat, well: A1, offsetFromBottomMm: 2, flowRate: 80}
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